PsychoPy2experiment version="2023.1.2"
Settings
  Completed URL = https://rutgers.ca1.qualtrics.com/jfe/form/SV_0fzhcLGgQrq08Vo
  Experiment info = {'session': '001', 'participant': 'FBVAL-'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['default.png', 'StimFile_TEST.xlsx', 'checkmark.png', 'nofeedback.png', 'poundkey.png', 'X_mark.png', 'StimFile_A.xlsx', 'StimFile_B.xlsx', 'StimFile_TEST_reallyshort.xlsx']
  Screen = 1
  Units = height
  Use version = 2023.1.2
  Window size (pixels) = [1440, 960]
  color = black
  expName = Game_C_ver2.0
  keyboardBackend = ioHub
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Routines
  Routine GetReady
    TextComponent fixation
      letterHeight = .1
      pos = (0, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = +
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    TextComponent text_4
      letterHeight = .05
      pos = (0, -.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Get ready to begin...
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  Routine Confidence
    PolygonComponent R2_highlightbox_conf
      fillColor = None
      lineColor [set every repeat] = $selectbox_color
      lineWidth = 12
      pos [set every repeat] = (0, respbox_y)
      shape = rectangle
      size = (respbox_width, respbox_height)
      startVal [time (s)] = 0.0
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    TextComponent R2_target_conf
      letterHeight = $targetword_height
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      text [set every repeat] = $targetword
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    TextComponent R2_word1_conf
      letterHeight = .1
      pos [set every repeat] = (0, topword_offset)
      startVal [time (s)] = 0.0
      text [set every repeat] = $x + R1Word1
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    TextComponent R2_word2_conf
      letterHeight = .1
      pos [set every repeat] = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      text [set every repeat] = $y + R1Word2
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    TextComponent conf_question
      letterHeight = .055
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text = How confident are you in your answer?
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    TextComponent confscale_numbers
      letterHeight = .06
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text:
        (1)   (2)   (3)   (4)   (5)   (6)

        low                            high
    KeyboardComponent confresp
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent slowrespmessage_conf
      color = red
      letterHeight = $errormsg_height
      pos = (0, errormsg_offset)
      startVal [time (s)] = 4
      text = please respond faster
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  Routine Fbk1
    PolygonComponent resp_highlightbox
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor [set every repeat] = $respbox_color
      lineWidth = 12
      pos [set every repeat] = (0, respbox_y)
      shape = rectangle
      size = (respbox_width, respbox_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
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    TextComponent Fbk_target
      letterHeight = .1
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $targetword
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    TextComponent Fbk_topsideword
      letterHeight = .1
      pos [set every repeat] = (0,topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $x + R1Word1
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    TextComponent Fbk_bottomsideword
      letterHeight = .1
      pos [set every repeat] = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $y + R1Word2
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    ImageComponent FbkImage
      image [set every repeat] = $fbkimagefile
      pos [set every repeat] = $[0, -.285]
      size = [.3,.3]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
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    TextComponent Error_message
      color = red
      letterHeight = .075
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $errormsg
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  Routine Fbk2
    PolygonComponent R2_resp_highlightbox
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor [set every repeat] = $respbox_color
      lineWidth = 12
      pos [set every repeat] = (0, respbox_y)
      shape = rectangle
      size = (respbox_width, respbox_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
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    TextComponent R2_Fbk_target
      letterHeight = .1
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $targetword
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    TextComponent R2_Fbk_topsideword
      letterHeight = .1
      pos [set every repeat] = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $x + R1Word1
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    TextComponent R2_Fbk_bottomsideword
      letterHeight = $word_height
      pos [set every repeat] = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $y + R1Word2
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    ImageComponent R2_FbkImage
      image [set every repeat] = $fbkimagefile
      pos [set every repeat] = $[0, -.285]
      size = [.3, .3]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
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    TextComponent R2_Error_message
      color = red
      letterHeight = $errormsg_height
      pos = (0, errormsg_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fbk_dur
      text [set every repeat] = $errormsg
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  Routine Thank_You
    TextComponent thank_you_text
      letterHeight = instructword_height
      startVal [time (s)] = 0.0
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      text:
        The experiment is now finished. Please ring the bell to alert the experimenter.

        Thank you for your participation!
    KeyboardComponent key_resp_2
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ShowResp_3
    PolygonComponent highlightbox_showresp_2
      fillColor = None
      lineColor [set every repeat] = $selectbox_color
      lineWidth = 12
      pos [set every repeat] = (0, respbox_y)
      shape = rectangle
      size = (respbox_width, respbox_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent Fbk_target_showresp_2
      letterHeight = $targetword_height
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $targetword
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    TextComponent b_Fbk_topsideword_showresp_2_
      letterHeight = $word_height
      pos [set every repeat] = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $x + R1Word1
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    TextComponent b_Fbk_bottomsideword_showresp_2_
      letterHeight = $word_height
      pos [set every repeat] = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $y + R1Word2
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  Routine Additup
    CodeComponent calctotalsfinal
      Code Type = Auto->JS
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      Begin Routine:
        bonus
        totalcorrect
        totalspent
        trialbonus
        bonusmessage
        totalcorrectmessage
        bonus = (totalcorrect * 10) + totalspent
        print(bonus)
        print(totalcorrect)
        print(totalspent)
        thisExp.addData('totalcorrect',totalcorrect)
        thisExp.addData('totalspent',totalspent)
        thisExp.addData('bonus',bonus)
        bonusmessage = "Total Bonus: %d cents" % bonus
        totalcorrectmessage = "Total Correct: %d" % totalcorrect
        thisExp.addData('bonusmessage',bonusmessage)
  Routine SetupConstants
    CodeComponent initializeVars
      Code Type = Both
      Before Experiment:
        #response key constants
        responseiscorrect2;
        key_list = ['1','2'] #['num_1','num_2']  #num_1 means '1' on the number pad
        ratingkey_list = ['1','2','3','4','5','6'] #['num_1','num_2']  #num_1 means '1' on the number pad
        key_1allowed = ['1'] #['num_1']
        key_2allowed = ['2'] #['num_2']
        instruc_list = ['t'] #['t' key for passing through instructions]
        responseiscorrect2;
        responseside2;
        correctside2;
        correctword2;
        correctwordindex2;
        #screen appearance constants
        background_color = 'black' #used for setting colors of objects, but the actual background color is set in monitor settings
        targetword_offset = .3 #show target X cm above center
        #topword_offset = .1  #show word1 X cm above(+)/below(-) center
        #bottomword_offset = -.05 #show word1 X cm above(+)/below(-) center
        #fbkimage_offset = .07
        showrespdur = 4 #seconds
        errormsg_offset = .2
        confscale_yoffset = -.25
        confnumbers_yoffset = -0.3285
        fbkyes_xoffset = -.3
        fbkyes_yoffset = -.05
        fbkno_xoffset = .1
        fbkno_yoffset = .1
        fbkcost_xoffset = -.3
        fbkcost_yoffset = -.15
        totalcorrect_offset = .02
        bonus_offset = -.04

        instructword_height = .15  #instruct word size (cm)
        instruct_width = .030  #instruct text width (cm)
        targetword_height = .1  #target word size cm
        word_height = .1  #word options size cm
        respbox_width = .1 * 8
        respbox_height = .1 * 1.25
        selectbox_color = 'white'
        errormsg_height = .075
        question_height = 1
        confscale_height = .75
        respbox_y = .1
        #timing constants
        studyviewwindow = 4 #R1 study duration in seconds
        fbk_dur = 2 #feedback duration in seconds
        study2dur = 300 #R2 study duration in seconds
        maxconffbkchoice_dur = 300 #max time for confidence rating/ fbk choice (seconds)
        slowrespmessage_delay = 4 #message for slow confidence/fbk choice responses
        slowrespmessage_dur = maxconffbkchoice_dur - slowrespmessage_delay

        #lists for tracking performance
        r1correct_list = [None] * 60 #(True or False in each slot indexed by WordIndex-1)
        r2correct_list = [None] * 60 #(True or False in each slot indexed by WordIndex-1)
        r3correct_list = [None] * 60 #(True or False in each slot indexed by WordIndex-1)
        correctword_list = [None] * 60 #(1 or 2 in each slot indexed by WordIndex-1)
        totalcorrect = 0
        totalspent = 0
        trialbonus = 10
        r1reversed = []
        r2reversed = []
        r3reversed = []
        #feedback cost list
        fbkcostlevels = [ -6, -4, -2, 0 ] #possible costs per trial
        trialspercostlevel = [ 15, 15, 15, 15 ] #how many trials of each cost level?
        fbkcost_list = []
        idx = 0
        for fbkcost in fbkcostlevels:
            fbkcost_list = fbkcost_list + ([fbkcost] * trialspercostlevel[idx])
            idx = idx + 1
        from random import shuffle
        shuffle(fbkcost_list)
      Before JS Experiment:
        //import {shuffle} from 'random';
        var key_list = ["1", "2"];
        var x
        var y
        var ratingkey_list = ["1", "2", "3", "4", "5", "6"];
        var key_1allowed = ["1"];
        var key_2allowed = ["2"];
        var instruc_list = ["t"];
        var background_color = "black";
        var targetword_offset = 0.3;
        var topword_offset = 0.1;
        var bottomword_offset = (- 0.05);
        var showrespdur = 4;
        var errormsg_offset = 0.2;
        var confscale_yoffset = (- 0.25);
        var confnumbers_yoffset = (- 0.3285);
        var fbkyes_xoffset = (- 0.3);
        var fbkyes_yoffset = (- 0.05);
        var fbkno_xoffset = 0.1;
        var fbkno_yoffset = 0.1;
        var fbkcost_xoffset = (- 0.3);
        var fbkcost_yoffset = (- 0.15);
        var totalcorrect_offset = 0.02;
        var bonus_offset = (- 0.04);
        var instructword_height = 0.15;
        var instruct_width = 0.03;
        var targetword_height = 0.1;
        var word_height = 0.1;
        var respbox_width = (0.1 * 8);
        var respbox_height = (0.1 * 1.25);
        var selectbox_color = "white";
        var errormsg_height = 0.075;
        var question_height = 1;
        var confscale_height = 0.75;
        var studyviewwindow = 4;
        var fbk_dur = 2;
        var study2dur = 300;
        var maxconffbkchoice_dur = 300;
        var respbox_y = 0.1;
        var slowrespmessage_delay = 4;
        var slowrespmessage_dur = (maxconffbkchoice_dur - slowrespmessage_delay);
        const r1correct_list = Array.apply(null, Array(60)).map(function () {})
        const r2correct_list = Array.apply(null, Array(60)).map(function () {})
        const r3correct_list = Array.apply(null, Array(60)).map(function () {})
        const correctword_list = Array.apply(null, Array(60)).map(function () {})
        const correctword_list2 = Array.apply(null, Array(60)).map(function () {})
        const correctword_list3 = Array.apply(null, Array(60)).map(function () {})
        var responseiscorrect2;
        var responseside2;
        var correctside2;
        var correctword2;
        var correctwordindex2;
        var correctwordindex;
        var responseiscorrect3;
        var responseside3;
        var correctside3;
        var correctword3;
        var correctwordindex3;
        var responseside4;
        var correctside4;
        var correctword4;
        var chosenword4;
        var totalcorrect = 0;
        var totalspent = 0;
        var trialbonus = 10;
        var fbkcostlevels = [(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0,(- 6), (- 4), (- 2), 0];
        var trialspercostlevel = [15, 15, 15, 15];
        var fbkcost_list = [];
        var idx = 0;
        for (var fbkcost, _pj_c = 0, _pj_a = fbkcostlevels, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            fbkcost = _pj_a[_pj_c];
            fbkcost_list = (fbkcost_list + ([fbkcost] * trialspercostlevel[idx]));
            idx = (idx + 1);
        }
        util.shuffle(fbkcost_list);
        util.shuffle(fbkcostlevels);
        console.log(fbkcostlevels)
    CodeComponent code_2
      Code Type = Both
      disabled = True
      Before JS Experiment:
        //import {shuffle} from 'random';
        var key_list = ["1", "2"];
        var ratingkey_list = ["1", "2", "3", "4", "5", "6"];
        var key_1allowed = ["1"];
        var key_2allowed = ["2"];
        var instruc_list = ["t"];
        var background_color = "black";
        var targetword_offset = 0.3;
        var topword_offset = 0.1;
        var bottomword_offset = (- 0.05);
        var showrespdur = 4;
        var errormsg_offset = 0.2;
        var confscale_yoffset = (- 0.25);
        var confnumbers_yoffset = (- 0.3285);
        var fbkyes_xoffset = (- 0.3);
        var fbkyes_yoffset = (- 0.05);
        var fbkno_xoffset = 0.1;
        var fbkno_yoffset = 0.1;
        var fbkcost_xoffset = (- 0.3);
        var fbkcost_yoffset = (- 0.15);
        var totalcorrect_offset = 0.02;
        var bonus_offset = (- 0.04);
        var instructword_height = 0.15;
        var instruct_width = 0.03;
        var targetword_height = 0.1;
        var word_height = 0.1;
        var respbox_width = (0.1 * 8);
        var respbox_height = (0.1 * 1.25);
        var selectbox_color = "white";
        var errormsg_height = 0.075;
        var question_height = 1;
        var confscale_height = 0.75;
        var studyviewwindow = 4;
        var fbk_dur = 2;
        var study2dur = 300;
        var maxconffbkchoice_dur = 300;
        var respbox_y = 0.1;
        var slowrespmessage_delay = 4;
        var slowrespmessage_dur = (maxconffbkchoice_dur - slowrespmessage_delay);
        const r1correct_list = Array.apply(null, Array(60)).map(function () {})
        const r2correct_list = Array.apply(null, Array(60)).map(function () {})
        const r3correct_list = Array.apply(null, Array(60)).map(function () {})
        const correctword_list = Array.apply(null, Array(60)).map(function () {})
        const correctword_list2 = Array.apply(null, Array(60)).map(function () {})
        var responseiscorrect2;
        var responseside2;
        var correctside2;
        var correctword2;
        var correctwordindex2;
        var correctwordindex;
        var responseiscorrect3;
        var responseside3;
        var correctside3;
        var correctword3;
        var fbkcost_list;
        var correctwordindex3;
        var totalcorrect = 0;
        var totalspent = 0;
        var trialbonus = 10;
        var fbkcostlevels = [(- 6), (- 4), (- 2), 0];
        var trialspercostlevel = [15, 15, 15, 15];
        util.shuffle(fbkcost_list);
        fbkcost_list = ["-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents","-6 cents", "-4 cents", "-2 cents", "0 cents"];
  Routine Instruct1b
    TextComponent Instruct1b_text
      letterHeight = .033
      startVal [time (s)] = 0.0
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      text:
        After you make your choice, you will see feedback indicating whether you were correct (a green checkmark) or incorrect (a red X). The matches are random, so you will not know which choice matches with each target word, but you should try to remember the feedback because you will see these word matches again.

        A potentially useful strategy is to create sentences in your head that will help you remember which word matches with the target word, but you can use your own strategy if you wish. Your cash bonus will depend on how many word pairs you remember correctly during the last round. You will earn 10 cents per correct answer and can earn up to 6 dollars.

        Try to respond as quickly as possible and learn from the feedback. You will have 4 seconds to respond during each set of words.

        Any questions?

        Press the '2' key to begin.
    KeyboardComponent Instructresp_2
      allowedKeys = '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruct1a
    TextComponent Instruct1a_text
      disabled = True
      letterHeight = 1
      startVal [time (s)] = 0.0
      units = cm
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      text:
        Part #1

        You will learn word matches in this first part.

        First, you will see a target word at the top of the screen, with two possible matches below it. Your job is to guess which word matches the top word. You will then get feedback about the accuracy of your choice and will try to remember the correct word match based on that feedback. In the last round, you can earn a cash bonus for each word you remember correctly.

        For example:

        ABSTRACT


        1) DOG

        2) PLATE

        To guess Option 1 – press the '1' key.
        To guess Option 2 – press the '2' key.
    TextComponent text_5
      letterHeight = 0.033
      startVal [time (s)] = 0.0
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      text:
        Part #1

        You will learn word matches in this first part.

        First, you will see a target word at the top of the screen, with two possible matches below it. Your job is to guess which word matches the top word. You will then get feedback about the accuracy of your choice and will try to remember the correct word match based on that feedback.

        In the last round, you will earn a cash bonus for each word you remember correctly.

        For example:

        ABSTRACT

        1) DOG

        2) PLATE

        To guess Option 1 – press the '1' key.
        To guess Option 2 – press the '2' key.
    KeyboardComponent Instructresp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Instruct3a
    TextComponent Instruct2a_text_3
      letterHeight = .033
      startVal [time (s)] = 0.0
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      text:
        Part #3

        In this last part, you will see the same sets of words from earlier. Your task is to remember the correct match for the top word, based on what you learned earlier.

        Press '1' or '2' to select the correct word.
        You will see your cash bonus total at the end of the round.

        Any questions?

        Press the '2' key to begin.
    KeyboardComponent Instructresp_6
      allowedKeys = '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ShowResp
    PolygonComponent highlightbox_showresp
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor [set every repeat] = $selectbox_color
      lineWidth = 12
      pos [set every repeat] = (0, respbox_y)
      shape = rectangle
      size = (respbox_width, respbox_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent Fbk_target_showresp
      letterHeight = .1
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $targetword
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    TextComponent Fbk_topsideword_showresp
      letterHeight = .1
      pos [set every repeat] = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $x + R1Word1
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    TextComponent Fbk_bottomsideword_showresp
      letterHeight = .1
      pos [set every repeat] = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $y + R1Word2
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  Routine Test3
    CodeComponent PlaceWords_3
      Code Type = Both
      Begin JS Routine:
        var r3reversed
        r3reversed = [];
        if ((Math.random() > 0.5)) {
            topword_offset = 0.1;
            bottomword_offset = (- 0.05);
            r3reversed = false;
            x = "1) ";
            y = "2) ";
        } else {
            topword_offset = (- 0.05);
            bottomword_offset = 0.1;
            r3reversed = true;
            x = "2) ";
            y = "1) ";
        }
        if ((r3reversed === true)) {
            correctkey = key_list[(2 - correctword_list[(WordIndex - 1)])];
        } else {
            correctkey = key_list[(correctword_list[(WordIndex - 1)] - 1)];
        }
        psychoJS.experiment.addData("r3reversed", r3reversed);
      Begin Routine:
        r3reversed = []
        if random()>.5:
            topword_offset = .1
            bottomword_offset = -.05
            r3reversed = False
            x = '1) '
            y = '2) '
        else:
            topword_offset = -.05
            bottomword_offset = .1
            r3reversed = True
            x = '2) '
            y = '1) '


        if r3reversed == True:
            correctkey = key_list[2-correctword_list[WordIndex-1]]
        else:
            correctkey = key_list[correctword_list[WordIndex-1]-1]


        thisExp.addData('r3reversed',r3reversed)
    TextComponent StudyView1_target_3
      letterHeight = $targetword_height
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $targetword
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    TextComponent StudyView_topsideword_3
      letterHeight = $word_height
      pos [set every repeat] = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $x + R1Word1
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    TextComponent StudyView1_bottomsideword_3
      letterHeight = $word_height
      pos [set every repeat] = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $y + R1Word2
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    KeyboardComponent Test3response
      allowedKeys = '1','2'
      correctAns = $correctkey
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      storeCorrect = True
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    CodeComponent CountCorrect
      Code Type = Auto->JS
      disabled = True
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      End Routine:
        errormsg=''

        correctkey2 = key_list[correctword_list[(WordIndex - 1)]]
        if r3reversed == True:
            correctkey2 = key_list[2-correctword_list[WordIndex-1]]
        else:
            correctkey2 = key_list[correctword_list[WordIndex-1]-1]

        if Test3response.keys == correctkey2:
            r3responseiscorrect = True
            r3chosenword = correctword_list[WordIndex-1]
            respbox_color = 'green'
            fbkimagefile = 'checkmark.png'
            totalcorrect = totalcorrect + 1
        elif Test3response.keys:
            r3responseiscorrect = False
            r3chosenword = 3 - correctword_list[WordIndex-1]
            fbkimagefile = 'X_mark.png'
            respbox_color = 'red'
        else:
            #no response
            r3responseiscorrect = False
            r3chosenword = 'miss'
            fbkimagefile = 'poundkey.png'
            respbox_color = background_color
            respbox_y = 2
            errormsg = 'no response'

        if Test3response.keys == key_list[0]: #top word selected
            respbox_y = .1
        elif Test3response.keys == key_list[1]: #bottom word selected
            respbox_y = -0.05
        if Test3response.keys:
            selectboxtrial_color = selectbox_color
            confrating_dur = maxconffbkchoice_dur
            choosefbk_dur = maxconffbkchoice_dur
            slowresptrial_delay = slowrespmessage_delay
            slowresptrial_dur = slowrespmessage_dur
        else:
            selectboxtrial_color = background_color
            confrating_dur = 0
            choosefbk_dur = 0
            slowresptrial_delay = 0
            slowresptrial_dur = 0
        thisExp.addData('r3responseiscorrect', r3responseiscorrect)
        thisExp.addData('r3chosenword', r3chosenword)
        thisExp.addData('correctkey2', correctkey2)
    CodeComponent test
      Code Type = Auto->JS
      disabled = True
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      End Routine:
        if Test3response.keys == correctkey: # coin flip to determine if response was correct
            responseiscorrect3 = True
            respbox_color = 'green'
            fbkimagefile = 'checkmark.png'
            totalcorrect = (totalcorrect + 1)
            r3correct_list[WordIndex-1] = True
            if Test3response.keys == key_list[0]: #first word selected, response is last key pressed
                responseside3 = 'top'
                correctside3 = 'top'
                chosenword3 = R1Word1
                correctword3 = R1Word1
                correctwordindex3 =1
                respbox_y = 0.1
                if r3reversed == True:
                    correctwordindex3=2
                    correctword3 = R1Word2
                    chosenword3 = R1Word2
            else: #second word selected
                responseside3 = 'bottom'
                correctside3 = 'bottom'
                correctword3 = R1Word2
                chosenword3 = R1Word2
                respbox_y = -.05
                correctwordindex3 = 2
                if r3reversed == True:
                    correctwordindex3=1
                    correctword3 = R1Word1
                    chosenword3 = R1Word1
        elif Test3response.keys : #response is made but incorrect (by coin flip above)
            responseiscorrect3 = False
            fbkimagefile = 'X_mark.png'
            respbox_color = 'red'
            r3correct_list[WordIndex-1] = False
            if Test3response.keys == key_list[0]: #first word selected
                responseside3 = 'top'
                correctside3 = 'bottom'
                correctword3 = R1Word2
                chosenword3 = R1Word1
                respbox_y = 0.1
                if r3reversed == True :
                    correctwordindex3=2
                    correctword3 = R1Word2
                    chosenword3 = R1Word1
            else:
                responseside3 = 'bottom'
                chosenword3 = R1Word2
                correctside3 = 'top'
                correctword3 = R1Word1
                respbox_y = -0.05
                if r3reversed == True :
                    correctwordindex3=1
                    correctword3 = R1Word1
                    chosenword3 = R1Word2
        else:
            #no response
            responseiscorrect3 = False
            r3correct_list[WordIndex-1] = False
            responseside3 = 'miss'
            fbkimagefile = 'poundkey.png'
            respbox_color = background_color
            respbox_y = 1
            errormsg = 'no response'


        #if Study1Response.keys:
        #    showrespdur = studyviewwindow - Study1Response.rt
        #else:
        #    showrespdur = 0
        if chosenword3 == correctword3:
            responseiscorrect3 = True
        else:
            responseiscorrect3 = False
        #correctword_list[WordIndex-1] = correctwordindex3
        #thisExp.addData('r3reversed',r3reversed)
        #thisExp.addData('topsideword', topsideword)
        #thisExp.addData('bottomsideword', bottomsideword)
        thisExp.addData('responseiscorrect3', responseiscorrect3)
        thisExp.addData('responseside3', responseside3)
        thisExp.addData('correctside3',correctside3)
        thisExp.addData('correctword3',correctword3)
        thisExp.addData('correctwordindex3',correctwordindex3)
        #thisExp.addData('correctkey2',correctkey2)
        thisExp.addData('chosenword3',chosenword3)
        thisExp.addData('correctword3',correctword3)
    CodeComponent test_2
      Code Type = Auto->JS
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      End Routine:
        if Test3response.keys == correctkey: # coin flip to determine if response was correct
            responseiscorrect3 = True
            respbox_color = 'green'
            fbkimagefile = 'checkmark.png'
            totalcorrect = (totalcorrect + 1)
            r3correct_list[WordIndex-1] = True
            if Test3response.keys == key_list[0]: #first word selected, response is last key pressed
                responseside3 = 'top'
                correctside3 = 'top'
                chosenword3 = R1Word1
                correctword3 = R1Word1
                correctwordindex3 =1
                respbox_y = 0.1
            else: #second word selected
                responseside3 = 'bottom'
                correctside3 = 'bottom'
                correctword3 = R1Word2
                chosenword3 = R1Word2
                respbox_y = -.05
                correctwordindex3 = 2
        elif Test3response.keys : #response is made but incorrect (by coin flip above)
            responseiscorrect3 = False
            fbkimagefile = 'X_mark.png'
            respbox_color = 'red'
            r3correct_list[WordIndex-1] = False
            if Test3response.keys == key_list[0]: #first word selected
                responseside3 = 'top'
                correctside3 = 'bottom'
                correctword3 = R1Word2
                chosenword3 = R1Word1
                respbox_y = 0.1
            else:
                responseside3 = 'bottom'
                chosenword3 = R1Word2
                correctside3 = 'top'
                correctword3 = R1Word1
                respbox_y = -0.05
        else:
            #no response
            responseiscorrect3 = False
            r3correct_list[WordIndex-1] = False
            responseside3 = 'miss'
            fbkimagefile = 'poundkey.png'
            respbox_color = background_color
            respbox_y = .3
            errormsg = 'no response'


        #if Study1Response.keys:
        #    showrespdur = studyviewwindow - Study1Response.rt
        #else:
        #    showrespdur = 0

        #correctword_list[WordIndex-1] = correctwordindex3
        #thisExp.addData('r3reversed',r3reversed)
        #thisExp.addData('topsideword', topsideword)
        #thisExp.addData('bottomsideword', bottomsideword)
        thisExp.addData('responseiscorrect3', responseiscorrect3)
        thisExp.addData('responseside3', responseside3)
        thisExp.addData('correctside3',correctside3)
        thisExp.addData('correctword3',correctword3)
        thisExp.addData('correctwordindex3',correctwordindex3)
        #thisExp.addData('correctkey2',correctkey2)
        thisExp.addData('chosenword3',chosenword3)
        thisExp.addData('correctword4',correctword4)
        thisExp.addData('responseside4', responseside4)
        thisExp.addData('correctside4',correctside4)
        thisExp.addData('chosenword4',chosenword4)
    CodeComponent count_code
      Code Type = Auto->JS
      disabled = True
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      End Routine:
        if Test3response.keys == correctkey: # coin flip to determine if response was correct
            responseiscorrect3 = True
            respbox_color = 'green'
            fbkimagefile = 'checkmark.png'
            totalcorrect = (totalcorrect + 1)
            r3correct_list[WordIndex-1] = True
            if Test3response.keys == key_list[0] and r3reversed == False: #first word selected, response is last key pressed
                responseside3 = 'top'
                correctside3 = 'top'
                chosenword3 = R1Word1
                correctword3 = R1Word1
                correctwordindex3 =1
                respbox_y = 0.1
                if Test3response.keys == key_list[0] and r3reversed == True:
                    correctwordindex3=2
                    correctword3 = R1Word2
                    chosenword3 = R1Word2
                    correctside3 = 'topsky'
                else:
                    correctwordindex3=1
                    correctword3 = R1Word1
                    chosenword3 = R1Word1
                    correctside3='topsko'
            else: #second word selected
                responseside3 = 'bottom'
                correctside3 = 'bottom'
                correctword3 = R1Word2
                chosenword3 = R1Word2
                respbox_y = -.05
                correctwordindex3 = 2
                if r3reversed == True:
                    correctwordindex3=1
                    correctword3 = R1Word1
                    chosenword3 = R1Word1
                    correctside3 = 'botsky'
                else:
                    correctwordindex3=2
                    correctword3 = R1Word2
                    chosenword3 = R1Word2
                    correctside3 = 'botsko'
        elif Test3response.keys : #response is made but incorrect (by coin flip above)
            responseiscorrect3 = False
            fbkimagefile = 'X_mark.png'
            respbox_color = 'red'
            r3correct_list[WordIndex-1] = False
            if Test3response.keys == key_list[0] and r3reversed == False: #first word selected
                responseside3 = 'top'
                correctside3 = 'bottom'
                correctword3 = R1Word2
                chosenword3 = R1Word1
                respbox_y = 0.1
                if r3reversed == True :
                    correctwordindex3=1
                    correctword3 = R1Word1
                    chosenword3 = R1Word2
                else:
                    correctwordindex3=2
                    correctword3 = R1Word2
                    chosenword3 = R1Word1
            else:
                responseside3 = 'bottom'
                chosenword3 = R1Word2
                correctside3 = 'top'
                correctword3 = R1Word1
                respbox_y = -0.05
                if r3reversed == True :
                    correctwordindex3=2
                    correctword3 = R1Word2
                    chosenword3 = R1Word1
                else:
                    correctwordindex3=1
                    correctword3 = R1Word1
                    chosenword3 = R1Word2
        else:
            #no response
            responseiscorrect3 = False
            r3correct_list[WordIndex-1] = False
            responseside3 = 'miss'
            fbkimagefile = 'poundkey.png'
            respbox_color = background_color
            respbox_y = 1
            errormsg = 'no response'
            if Test3response.keys == correctkey:
                correctside3 = 'top'
                correctword3 = R1Word1
                if r3reversed:
                    correctwordindex3=2
                    correctword3 = R1Word2
                else:
                    correctwordindex3=1
                    correctword3 = R1Word1
            else:
                correctside3 = 'bottom'
                correctword = R1Word2
                if r3reversed == True:
                    correctwordindex3=1
                    correctword3 = R1Word1
                else:
                    correctwordindex3=2
                    correctword3 = R1Word2
        #if Study1Response.keys:
        #    showrespdur = studyviewwindow - Study1Response.rt
        #else:
        #    showrespdur = 0
        if chosenword3 == correctword3:
            responseiscorrect3 = True
        else:
            responseiscorrect3 = False
        correctword_list3[WordIndex-1] = correctwordindex3
        #thisExp.addData('r3reversed',r3reversed)
        #thisExp.addData('topsideword', topsideword)
        #thisExp.addData('bottomsideword', bottomsideword)
        thisExp.addData('responseiscorrect3', responseiscorrect3)
        thisExp.addData('responseside3', responseside3)
        thisExp.addData('correctside3',correctside3)
        thisExp.addData('correctword3',correctword3)
        thisExp.addData('correctwordindex3',correctwordindex3)
        #thisExp.addData('correctkey2',correctkey2)
        thisExp.addData('chosenword3',chosenword3)
        thisExp.addData('correctword3',correctword3)
    CodeComponent count_code_2
      Code Type = Auto->JS
      disabled = True
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      End Routine:
        if Test3response.keys == correctkey: # coin flip to determine if response was correct
            responseiscorrect3 = True
            respbox_color = 'green'
            fbkimagefile = 'checkmark.png'
            totalcorrect = (totalcorrect + 1)
            r3correct_list[WordIndex-1] = True
            if Test3response.keys == key_list[0]: #first word selected, response is last key pressed
                responseside3 = 'top'
                correctside3 = 'top'
                chosenword3 = R1Word1
                correctword3 = R1Word1
                correctwordindex3 =1
                respbox_y = 0.1
                if Test3response.keys == key_list[0] and r3reversed == True:
                    correctwordindex3=2
                    correctword3 = R1Word2
                    chosenword3 = R1Word2
                    correctside3 = 'topsky'
            else: #second word selected
                responseside3 = 'bottom'
                correctside3 = 'bottom'
                correctword3 = R1Word2
                chosenword3 = R1Word2
                respbox_y = -.05
                correctwordindex3 = 2
                if Test3response.keys == key_list[1] and r3reversed == True:
                    correctwordindex3=1
                    correctword3 = R1Word1
                    chosenword3 = R1Word1
                    correctside3 = 'botsky'
                else:
                    correctwordindex3=2
                    correctword3 = R1Word2
                    chosenword3 = R1Word2
                    correctside3 = 'botsko'
        elif Test3response.keys : #response is made but incorrect (by coin flip above)
            responseiscorrect3 = False
            fbkimagefile = 'X_mark.png'
            respbox_color = 'red'
            r3correct_list[WordIndex-1] = False
            if Test3response.keys == key_list[0] and r3reversed == False: #first word selected
                responseside3 = 'top'
                correctside3 = 'bottom'
                correctword3 = R1Word2
                chosenword3 = R1Word1
                respbox_y = 0.1
                if r3reversed == True :
                    correctwordindex3=1
                    correctword3 = R1Word1
                    chosenword3 = R1Word2
                else:
                    correctwordindex3=2
                    correctword3 = R1Word2
                    chosenword3 = R1Word1
            else:
                responseside3 = 'bottom'
                chosenword3 = R1Word2
                correctside3 = 'top'
                correctword3 = R1Word1
                respbox_y = -0.05
                if r3reversed == True :
                    correctwordindex3=2
                    correctword3 = R1Word2
                    chosenword3 = R1Word1
                else:
                    correctwordindex3=1
                    correctword3 = R1Word1
                    chosenword3 = R1Word2
        else:
            #no response
            responseiscorrect3 = False
            r3correct_list[WordIndex-1] = False
            responseside3 = 'miss'
            fbkimagefile = 'poundkey.png'
            respbox_color = background_color
            respbox_y = 1
            errormsg = 'no response'
            if Test3response.keys == correctkey:
                correctside3 = 'top'
                correctword3 = R1Word1
                if r3reversed:
                    correctwordindex3=2
                    correctword3 = R1Word2
                else:
                    correctwordindex3=1
                    correctword3 = R1Word1
            else:
                correctside3 = 'bottom'
                correctword = R1Word2
                if r3reversed == True:
                    correctwordindex3=1
                    correctword3 = R1Word1
                else:
                    correctwordindex3=2
                    correctword3 = R1Word2
        #if Study1Response.keys:
        #    showrespdur = studyviewwindow - Study1Response.rt
        #else:
        #    showrespdur = 0
        if chosenword3 == correctword3:
            responseiscorrect3 = True
        else:
            responseiscorrect3 = False
        correctword_list3[WordIndex-1] = correctwordindex3
        #thisExp.addData('r3reversed',r3reversed)
        #thisExp.addData('topsideword', topsideword)
        #thisExp.addData('bottomsideword', bottomsideword)
        thisExp.addData('responseiscorrect3', responseiscorrect3)
        thisExp.addData('responseside3', responseside3)
        thisExp.addData('correctside3',correctside3)
        thisExp.addData('correctword3',correctword3)
        thisExp.addData('correctwordindex3',correctwordindex3)
        #thisExp.addData('correctkey2',correctkey2)
        thisExp.addData('chosenword3',chosenword3)
        thisExp.addData('correctword3',correctword3)
  Routine StudyView1
    CodeComponent PlaceWords
      Code Type = Both
      Begin Experiment:
        topword_offset = 0
        bottomword_offset = 0
      Begin JS Experiment:
        topword_offset = 0;
        bottomword_offset = 0;
      Begin JS Routine:
        x = ["1) "];
        y = ["2) "];
        if ((Math.random() > 0.5)) {
            topword_offset = 0.1;
            bottomword_offset = (- 0.05);
            r1reversed = false;
            x = "1) ";
            y = "2) ";
        } else {
            topword_offset = (- 0.05);
            bottomword_offset = 0.1;
            r1reversed = true;
            x = "2) ";
            y = "1) ";
        }
        console.log(r1reversed);
        console.log(topword_offset);
      Begin Routine:
        x = ['1) ']
        y = ['2) ']
        if random()>.5:
            topword_offset = (.1)
            bottomword_offset = (-0.05)
            r1reversed = False
            x = '1) '
            y = '2) '
        else:
            topword_offset = -0.05
            bottomword_offset = .1
            r1reversed = True
            x = '2) '
            y = '1) '

        print(r1reversed)
        print(topword_offset)
    TextComponent StudyView1_target
      letterHeight = .1
      pos = (0,targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $targetword
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    KeyboardComponent Study1Response
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      storeCorrect = True
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    TextComponent StudyView_topsideword
      letterHeight = .1
      pos [set every repeat] = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $x + R1Word1
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    TextComponent StudyView1_bottomsideword
      letterHeight = .1
      pos [set every repeat] = (0,bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $y + R1Word2
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    CodeComponent SetFbk
      Code Type = Auto->JS
      disabled = True
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      End Routine:
        errormsg=''
        #fbkimagefile = ''

        WordIndex

        if random()>.5 and Study1Response.keys : # coin flip to determine if response was correct
            responseiscorrect = True
            respbox_color = 'green'
            fbkimagefile = 'checkmark.png'
            r1correct_list[WordIndex-1] = True
            if Study1Response.keys == key_list[0]: #first word selected, response is last key pressed
                responseside = 'top'
                correctside = 'top'
                correctword = R1Word1
                respbox_y = 0.1
                if r1reversed:
                    correctwordindex=2
                else:
                    correctwordindex=1
            else: #second word selected
                responseside = 'bottom'
                correctside = 'bottom'
                correctword = R1Word2
                respbox_y = -.05
                if r1reversed:
                    correctwordindex=1
                else:
                    correctwordindex=2
        elif Study1Response.keys : #response is made but incorrect (by coin flip above)
            responseiscorrect = False
            fbkimagefile = 'X_mark.png'
            respbox_color = 'red'
            r1correct_list[WordIndex-1] = False
            if Study1Response.keys == key_list[0]: #first word selected
                responseside = 'top'
                correctside = 'bottom'
                correctword = R1Word2
                respbox_y = 0.1
                if r1reversed:
                    correctwordindex=1
                else:
                    correctwordindex=2
            else:
                responseside = 'bottom'
                correctside = 'top'
                correctword = R1Word1
                respbox_y = -0.05
                if r1reversed:
                    correctwordindex=2
                else:
                    correctwordindex=1
        else:
            #no response
            responseiscorrect = False
            r1correct_list[WordIndex-1] = False
            responseside = 'miss'
            fbkimagefile = 'poundkey.png'
            respbox_color = background_color
            respbox_y = .3
            errormsg = 'no response'
            if random()>.5:
                correctside = 'top'
                correctword = R1Word1
                if r1reversed:
                    correctwordindex=2
                else:
                    correctwordindex=1
            else:
                correctside = 'bottom'
                correctword = R1Word2
                if r1reversed:
                    correctwordindex=1
                else:
                    correctwordindex=2
        #if Study1Response.keys:
        #    showrespdur = studyviewwindow - Study1Response.rt
        #else:
        #    showrespdur = 0
        correctword_list[WordIndex-1] = correctwordindex
        thisExp.addData('r1reversed',r1reversed)
        #thisExp.addData('topsideword', topsideword)
        #thisExp.addData('bottomsideword', bottomsideword)
        thisExp.addData('responseiscorrect', responseiscorrect)
        thisExp.addData('responseside', responseside)
        thisExp.addData('correctside',correctside)
        thisExp.addData('correctword',correctword)
        thisExp.addData('correctwordindex',correctwordindex)
    CodeComponent test_3
      Code Type = Auto->JS
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      End Routine:
        errormsg=''
        #fbkimagefile = ''

        WordIndex

        if random()>.5 and Study1Response.keys : # coin flip to determine if response was correct
            responseiscorrect = True
            respbox_color = 'green'
            fbkimagefile = 'checkmark.png'
            r1correct_list[WordIndex-1] = True
            if Study1Response.keys == key_list[0]: #first word selected, response is last key pressed
                responseside = 'top'
                correctside = 'top'
        #        correctword = R1Word1
                respbox_y = 0.1
                if r1reversed == True:
                    correctwordindex=2
                    correctword = R1Word2
                else:
                    correctwordindex=1
                    correctword = R1Word1
            else: #second word selected
                responseside = 'bottom'
                correctside = 'bottom'
        #        correctword = R1Word2
                respbox_y = -.05
                if r1reversed == True:
                    correctwordindex=1
                    correctword = R1Word1
                else:
                    correctwordindex=2
                    correctword = R1Word2
        elif Study1Response.keys : #response is made but incorrect (by coin flip above)
            responseiscorrect = False
            fbkimagefile = 'X_mark.png'
            respbox_color = 'red'
            r1correct_list[WordIndex-1] = False
            if Study1Response.keys == key_list[0]: #first word selected
                responseside = 'top'
                correctside = 'bottom'
        #        correctword = R1Word2
                respbox_y = 0.1
                if r1reversed:
                    correctwordindex=1
                    correctword = R1Word1
                else:
                    correctwordindex=2
                    correctword = R1Word2
            else:
                responseside = 'bottom'
                correctside = 'top'
        #        correctword = R1Word1
                respbox_y = -0.05
                if r1reversed:
                    correctwordindex=2
                    correctword = R1Word2
                else:
                    correctwordindex=1
                    correctword = R1Word1
        else:
            #no response
            responseiscorrect = False
            r1correct_list[WordIndex-1] = False
            responseside = 'miss'
            fbkimagefile = 'poundkey.png'
            respbox_color = background_color
            respbox_y = 1
            errormsg = 'no response'
            if random()>.5:
                correctside = 'top'
        #        correctword = R1Word1
                if r1reversed:
                    correctwordindex=2
                    correctword = R1Word2
                else:
                    correctwordindex=1
                    correctword = R1Word1
            else:
                correctside = 'bottom'
        #        correctword = R1Word2
                if r1reversed:
                    correctwordindex=1
                    correctword = R1Word1
                else:
                    correctwordindex=2
                    correctword = R1Word2
        #if Study1Response.keys:
        #    showrespdur = studyviewwindow - Study1Response.rt
        #else:
        #    showrespdur = 0
        if correctside == responseside:
            responseiscorrect = True
        else:
            responseiscorrect = False
        correctword_list[WordIndex-1] = correctwordindex
        thisExp.addData('r1reversed',r1reversed)
        #thisExp.addData('topsideword', topsideword)
        #thisExp.addData('bottomsideword', bottomsideword)
        thisExp.addData('responseiscorrect', responseiscorrect)
        thisExp.addData('responseside', responseside)
        thisExp.addData('correctside',correctside)
        thisExp.addData('correctword',correctword)
        thisExp.addData('correctwordindex',correctwordindex)
  Routine EndPart1
    TextComponent text
      letterHeight = .033
      startVal [time (s)] = 0.0
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      text:
        That was the end of Part #1.

        Please ring the bell to alert the experimenter, who will set you up on Part #2.
    KeyboardComponent contpart2
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndPart2
    TextComponent text_2
      letterHeight = .033
      startVal [time (s)] = 0.0
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      text:
        That was the end of Part #2.

        Please ring the bell to alert the experimenter, who will set you up on the final part.
    KeyboardComponent contpart2_2
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndPart3
    TextComponent text_3
      letterHeight = .033
      startVal [time (s)] = 0.0
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      text:
        That was the end of Part #3.

        Please alert the experimenter.
    KeyboardComponent Lastresp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent totalcorrect_text
      letterHeight = .033
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $totalcorrectmessage
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    TextComponent bonus_text
      letterHeight = .033
      pos = (0, -.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $bonusmessage + ' cents '
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  Routine ChooseFbk
    TextComponent R2_FbkQuestion
      letterHeight = .075
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      text [set every repeat] = $fbk_question
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    KeyboardComponent fbkchoice_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent fbkcosttext
      letterHeight = .075
      pos = (fbkcost_xoffset,fbkcost_yoffset)
      startVal [time (s)] = 0.0
      text [set every repeat] = $fbkcostlevels[idy]
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    TextComponent R2_fbkyes
      letterHeight = .075
      pos = (fbkyes_xoffset, fbkyes_yoffset)
      startVal [time (s)] = 0.0
      text = 1) YES
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    TextComponent R2_fbkno
      letterHeight = .075
      pos = (.3, -.05)
      startVal [time (s)] = 0.0
      text = 2) NO
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    TextComponent slowrespmessage_fbk
      color = red
      letterHeight = .1
      pos = (0, .15)
      startVal [time (s)] = 4
      text = please respond faster
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    TextComponent fbknocosttext
      letterHeight = .075
      pos = (.3,fbkcost_yoffset)
      startVal [time (s)] = 0.0
      text [set every repeat] =   0
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    CodeComponent setfbkchoice
      Code Type = Both
      End JS Routine:
        var feedback_chosen2 = [];
        if ((fbkchoice_resp.keys === key_list[1])) {
            fbkimagefile = "nofeedback.png";
            respbox_color = selectbox_color;
            feedback_chosen = 0;
            feedback_chosen2 = false;
        } else {
            if ((fbkchoice_resp.keys === key_list[0])) {
                totalspent = (totalspent + fbkcostlevels[(idy)]);
                feedback_chosen = 1;
                feedback_chosen2 = true;
            } else {
                fbkimagefile = "nofeedback.png";
                respbox_color = background_color;
                feedback_chosen = (- 99);
            }
        }

        idy = (idy + 1)
        console.log(idy)
        psychoJS.experiment.addData("feedbackchoice", feedback_chosen);
        psychoJS.experiment.addData("feedbackchoice2", feedback_chosen2);
      End Routine:
        if fbkchoice_resp.keys == key_list[1]:
            fbkimagefile = 'nofeedback.png'
            respbox_color = selectbox_color
            feedback_chosen = 0
        elif fbkchoice_resp.keys == key_list[0]:
            totalspent = totalspent + trialfbkcost
            feedback_chosen = 1
        else:
            fbkimagefile = 'nofeedback.png'
            respbox_color = background_color
            feedback_chosen = -99

        console.log(fbkcostlevels[idy+1])
        thisExp.addData('feedbackchoice',feedback_chosen)
        thisExp.addData('feedbackcost',trialfbkcost)
  Routine Instruct2c
    TextComponent Instruct2a_text_2
      letterHeight = $instructword_height
      startVal [time (s)] = 0.0
      wrapWidth = $instruct_width
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      text:
        That was the end of the first part.

        In Part #2, you will see the same sets of words that you learned
        in Part #1.

        First, select the correct word that is paired with the top word
        (based on feedback you got in Part #1)

        Next, you will be asked how confident you are that your answer is
        correct. Press a number key '1' through '6' to indicate your
        confidence.
        1 = ~50% confidence (LOW: ~50/50 guess)
        2 = ~60% confidence
        3 = ~70% confidence
        4 = ~80% confidence
        5 = ~90% confidence
        6 = ~100% confidence (HIGH: basically 100% sure)
    KeyboardComponent Instructresp_5
      allowedKeys = key_list
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruct4
    TextComponent Instruct2a_text
      letterHeight = .033
      startVal [time (s)] = 0.0
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      text:
        Part #2

        Now you will see the words from Part #1 again. Your task is to remember the correct match for the top word, based on what you learned in Part #1. First, press '1' or '2' to select the correct word. The sets of words may not be in the same order as when you saw them the first time.

        Next, you will be asked to rate how confident you are that your answer is correct. Press a number key from '1' through '6' to indicate your confidence.

        1 = ~50% confidence (LOW: ~50/50 guess)
        2 = ~60% confidence
        3 = ~70% confidence
        4 = ~80% confidence
        5 = ~90% confidence
        6 = ~100% confidence (HIGH: ~100% sure)
    KeyboardComponent Instructresp_3
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruct4_2
    TextComponent Instruct2b_text
      letterHeight = .033
      startVal [time (s)] = 0.0
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      text:
        After you rate your confidence, you will have an opportunity to get feedback again about whether you selected the correct word. The screen will say: "Do you want feedback?"and you can press '1' to get feedback, or '2' to ignore the feedback.

        Sometimes, you will see that it will cost a few cents to get feedback. This means if you choose 'YES' for feedback, you will have the cost deducted from your final cash bonus. Sometimes the cost will be zero cents so you can get feedback for free.  If you choose to ignore the feedback, no money will be deducted  from your bonus.

        Keep in mind that you will be rewarded with 10 cents for every correct response you make during the final bonus round. You can be rewarded up to 6 dollars, depending on how well you perform. Since your final cash bonus will depend on your performance during the final round, it may be worthwhile to accept the cost of the feedback so that you can learn the word pairs well.

        Any questions?

        Press the '2' key to begin.
    KeyboardComponent Instructresp_4
      allowedKeys = '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine StudyView4
    CodeComponent PlaceWords_2
      Code Type = Auto->JS
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      Begin Routine:
        if random()>.5:
            topword_offset = .1
            bottomword_offset = -.05
            r2reversed = False
            x = '1) '
            y = '2) '
        else:
            topword_offset = -.05
            bottomword_offset = .1
            r2reversed = True
            x = '2) '
            y = '1) '
        thisExp.addData('r2reversed',r2reversed)


        #trialfbkcost = fbkcost_list[WordIndex-1]
        #costnum = fbkcostlevels[idy]
        #print(costnum)
        #costnum = str(abs(trialfbkcost))
        #if trialfbkcost > 0:
        #    fbk_question = "Do you want feedback?\n (+%s cents if you choose YES)" % costnum
        #    costsign = '+'
        #else:
        #    fbk_question = "Do you want feedback?\n (-%s cents if you choose YES)" % costnum
        #    costsign = '-'
    TextComponent StudyView1_target_2
      letterHeight = $.1
      pos = (0, targetword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $study2dur
      text [set every repeat] = $targetword
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    TextComponent StudyView_topsideword_2
      letterHeight = $word_height
      pos [set every repeat] = (0, topword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $study2dur
      text [set every repeat] = $x + R1Word1
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    TextComponent StudyView1_bottomsideword_2
      letterHeight = $word_height
      pos [set every repeat] = (0, bottomword_offset)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $study2dur
      text [set every repeat] = $y + R1Word2
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    KeyboardComponent Study2Response
      allowedKeys = '1','2'
      correctAns = $correctkey
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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    CodeComponent SetFbk2
      Code Type = Both
      disabled = True
      End JS Routine:
        errormsg = "";
        var fbkimagefile;
        fbkimagefile = "";
        if (r2reversed === true) {
            correctkey = key_list[(2 - correctword_list[(WordIndex - 1)])];
        } else {
            correctkey = key_list[(correctword_list[(WordIndex - 1)] - 1)];
        }
        if ((Study2Response.keys === correctkey)) {
            r2responseiscorrect = true;
            r2chosenword = correctword_list[(WordIndex - 1)];
            respbox_color = "green";
            fbkimagefile = "checkmark.png";
        } else {
            if (Study2Response.keys) {
                r2responseiscorrect = false;
                r2chosenword = (3 - correctword_list[(WordIndex - 1)]);
                fbkimagefile = "X_mark.png";
                respbox_color = "red";
            } else {
                r2responseiscorrect = false;
                r2chosenword = "miss";
                fbkimagefile = "poundkey.png";
                respbox_color = background_color;
                respbox_y = targetword_offset;
                errormsg = "no response";
            }
        }
        if ((Study2Response.keys === key_list[0])) {
            respbox_y = topword_offset;
        } else {
            if ((Study2Response.keys === key_list[1])) {
                respbox_y = bottomword_offset;
            }
        }
        if (Study2Response.keys) {
            selectboxtrial_color = selectbox_color;
            confrating_dur = maxconffbkchoice_dur;
            choosefbk_dur = maxconffbkchoice_dur;
            slowresptrial_delay = slowrespmessage_delay;
            slowresptrial_dur = slowrespmessage_dur;
        } else {
            selectboxtrial_color = background_color;
            confrating_dur = 0;
            choosefbk_dur = 0;
            slowresptrial_delay = 0;
            slowresptrial_dur = 0;
        }
        psychoJS.experiment.addData("r2reversed", r2reversed);
        psychoJS.experiment.addData("r2responseiscorrect", r2responseiscorrect);
        psychoJS.experiment.addData("r2chosenword", r2chosenword);
      End Routine:
        errormsg=''
        fbkimagefile
        fbkimagefile = ''
        if r2reversed == True:
            correctkey = key_list[2-correctword_list[WordIndex-1]]
        else:
            correctkey = key_list[correctword_list[WordIndex-1]-1]

        if Study2Response.keys == correctkey:
            r2responseiscorrect = True
            r2chosenword = correctword_list[WordIndex-1]
            respbox_color = 'green'
            fbkimagefile = 'checkmark.png'
        elif Study2Response.keys:
            r2responseiscorrect = False
            r2chosenword = 3 - correctword_list[WordIndex-1]
            fbkimagefile = 'X_mark.png'
            respbox_color = 'red'
        else:
            #no response
            r2responseiscorrect = False
            r2chosenword = 'miss'
            fbkimagefile = 'poundkey.png'
            respbox_color = background_color
            respbox_y = 1
            errormsg = 'no response'

        if Study2Response.keys == key_list[0]: #top word selected
            respbox_y = .1
        elif Study2Response.keys == key_list[1]: #bottom word selected
            respbox_y = -0.05
        if Study2Response.keys:
            selectboxtrial_color = selectbox_color
            confrating_dur = maxconffbkchoice_dur
            choosefbk_dur = maxconffbkchoice_dur
            slowresptrial_delay = slowrespmessage_delay
            slowresptrial_dur = slowrespmessage_dur
        else:
            selectboxtrial_color = background_color
            confrating_dur = 0
            choosefbk_dur = 0
            slowresptrial_delay = 0
            slowresptrial_dur = 0
        print(respbox_y)
        thisExp.addData('r2reversed',r2reversed)
        thisExp.addData('r2responseiscorrect', r2responseiscorrect)
        thisExp.addData('r2chosenword', r2chosenword)
    TextComponent slowrespmessage_conf_2
      color = red
      letterHeight = $errormsg_height
      pos = (0, errormsg_offset)
      startVal [time (s)] = 4
      text = please respond faster
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    CodeComponent JSONLY_TEST
      Code Type = Both
      Before JS Experiment:
        var idy;
        idy = 0;
        console.log(idy)
      End JS Routine:
        errormsg = "";
        WordIndex;
        if (r2reversed === true) {
            correctkey = key_list[(2 - correctword_list[(WordIndex - 1)])];
        } else {
            correctkey = key_list[(correctword_list[(WordIndex - 1)] - 1)];
        }
        if ((Study2Response.keys === correctkey)) {
            r2responseiscorrect = true;
            respbox_color = "green";
            fbkimagefile = "checkmark.png";
            r2correct_list[(WordIndex - 1)] = true;
            r2chosenword = correctword_list2[(WordIndex - 1)];
            if ((Study2Response.keys === key_list[0])) {
                responseside2 = "top";
                correctside2 = "top";
        //        correctword2 = R1Word1;
                respbox_y = 0.1;
                if (r2reversed === true) {
                    correctwordindex2 = 2;
                    correctword2 = R1Word2;
                } else {
                    correctwordindex2 = 1;
                    correctword2 = R1Word1;
                }
            } else {
                responseside2 = "bottom";
                correctside2 = "bottom";
        //        correctword2 = R1Word2;
                respbox_y = (- 0.05);
                if (r2reversed) {
                    correctwordindex2 = 1;
                    correctword2 = R1Word1;
                } else {
                    correctwordindex2 = 2;
                    correctword2 = R1Word2;
                }
            }
        } else {
            if (Study2Response.keys) {
                responseiscorrect2 = false;
                fbkimagefile = "X_mark.png";
                respbox_color = "red";
                r2correct_list[(WordIndex - 1)] = false;
                if ((Study2Response.keys === key_list[0])) {
                    responseside2 = "top";
                    correctside2 = "bottom";
        //            correctword2 = R1Word2;
                    respbox_y = 0.1;
                    if (r2reversed) {
                        correctwordindex2 = 1;
                        correctword2 = R1Word1;
                    } else {
                        correctwordindex2 = 2;
                        correctword2 = R1Word2;
                    }
                } else {
                    responseside2 = "bottom";
                    correctside2 = "top";
        //            correctword2 = R1Word1;
                    respbox_y = (- 0.05);
                    if (r2reversed) {
                        correctwordindex2 = 2;
                        correctword2 = R1Word2;
                    } else {
                        correctwordindex2 = 1;
                        correctword2 = R1Word1;
                    }
                }
            } else {
                responseiscorrect2 = false;
                r2correct_list[(WordIndex - 1)] = false;
                responseside2 = "miss";
                fbkimagefile = "poundkey.png";
                respbox_color = background_color;
                respbox_y = 0.3;
                errormsg = "no response";
                if ((Study2Response.keys === correctkey)) {
                    correctside2 = "top";
        //            correctword2 = R1Word1;
                    if (r2reversed) {
                        correctwordindex2 = 2;
                        correctword2 = R1Word2;
                    } else {
                        correctwordindex2 = 1;
                        correctword2 = R1Word1;
                    }
                } else {
                    correctside2 = "bottom";
        //            correctword2 = R1Word2;
                    if (r2reversed) {
                        correctwordindex2 = 1;
                        correctword2 = R1Word1;
                    } else {
                        correctwordindex2 = 2;
                        correctword2 = R1Word2;
                    }
                }
            }
        }
        if ((correctside2 === responseside2)) {
            responseiscorrect2 = true;
        } else {
            responseiscorrect2 = false;
        }


        trialfbkcost = fbkcost_list[(WordIndex - 1)];
        costnum = fbkcostlevels[idy];
        console.log(costnum);
        if ((trialfbkcost > 0)) {
            fbk_question = `Do you want feedback?
        (${costnum} cents)`
        ;
            costsign = "";
        } else {
            fbk_question = `Do you want feedback?
        (${costnum} cents)`
        ;
            costsign = "";
        }
        correctword_list2[(WordIndex - 1)] = correctwordindex2;
        psychoJS.experiment.addData("responseiscorrect2", responseiscorrect2);
        psychoJS.experiment.addData("responseside2", responseside2);
        psychoJS.experiment.addData("correctside2", correctside2);
        psychoJS.experiment.addData("correctword2", correctword2);
        psychoJS.experiment.addData("correctwordindex2", correctwordindex2);
        psychoJS.experiment.addData("correctkey", correctkey);
        psychoJS.experiment.addData("costnum", costnum);
        psychoJS.experiment.addData("r2chosenword", r2chosenword);
    CodeComponent PYONLY_TEST
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        errormsg=''
        fbkimagefile
        fbkimagefile = ''
        if r2reversed == True:
            correctkey = key_list[2-correctword_list[WordIndex-1]]
        else:
            correctkey = key_list[correctword_list[WordIndex-1]-1]

        if Study2Response.keys == correctkey:
            r2responseiscorrect = True
            r2chosenword = correctword_list[WordIndex-1]
            respbox_color = 'green'
            fbkimagefile = 'checkmark.png'
        elif Study2Response.keys:
            r2responseiscorrect = False
            r2chosenword = 3 - correctword_list[WordIndex-1]
            fbkimagefile = 'X_mark.png'
            respbox_color = 'red'
        else:
            #no response
            r2responseiscorrect = False
            r2chosenword = 'miss'
            fbkimagefile = 'poundkey.png'
            respbox_color = background_color
            respbox_y = 1
            errormsg = 'no response'

        if Study2Response.keys == key_list[0]: #top word selected
            respbox_y = .1
        elif Study2Response.keys == key_list[1]: #bottom word selected
            respbox_y = -0.05
        if Study2Response.keys:
            selectboxtrial_color = selectbox_color
            confrating_dur = maxconffbkchoice_dur
            choosefbk_dur = maxconffbkchoice_dur
            slowresptrial_delay = slowrespmessage_delay
            slowresptrial_dur = slowrespmessage_dur
        else:
            selectboxtrial_color = background_color
            confrating_dur = 0
            choosefbk_dur = 0
            slowresptrial_delay = 0
            slowresptrial_dur = 0
        print(respbox_y)
        thisExp.addData('r2reversed',r2reversed)
        thisExp.addData('r2responseiscorrect', r2responseiscorrect)
        thisExp.addData('r2chosenword', r2chosenword)
  Routine code
    CodeComponent PlaceWords_4
      Code Type = Auto->JS
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      End Routine:
        topword_offset = 0
        bottomword_offset = 0
        if random()>.5:
            topword_offset = (.1)
            bottomword_offset = (-0.05)
            r1reversed = False

        else:
            topword_offset = -0.05
            bottomword_offset = .1
            r1reversed = True

        print(r1reversed)
        print(topword_offset)
Flow
  Routine SetupConstants
  Routine Instruct1a
  Routine Instruct1b
  Routine GetReady
  LoopInitiator Study1Loop loopType="TrialHandler"
    conditionsFile = StimFile_A.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'targetword': 'LANE', 'R1Word1': 'BATH', 'R1Word2': 'JOKE', 'WordIndex': 1},
      {'targetword': 'HOLE', 'R1Word1': 'COOL', 'R1Word2': 'MINE', 'WordIndex': 2},
      {'targetword': 'COUNCIL', 'R1Word1': 'PRODUCT', 'R1Word2': 'BALANCE', 'WordIndex': 3},
      {'targetword': 'PRIVATE', 'R1Word1': 'MEETING', 'R1Word2': 'SURFACE', 'WordIndex': 4},
      {'targetword': 'CAUGHT', 'R1Word1': 'SQUARE', 'R1Word2': 'WEALTH', 'WordIndex': 5},
      {'targetword': 'WALK', 'R1Word1': 'SHOT', 'R1Word2': 'PAID', 'WordIndex': 6},
      {'targetword': 'GAME', 'R1Word1': 'BILL', 'R1Word2': 'DEEP', 'WordIndex': 7},
      {'targetword': 'FOOD', 'R1Word1': 'HALL', 'R1Word2': 'PLAY', 'WordIndex': 8},
      {'targetword': 'WEEK', 'R1Word1': 'HELP', 'R1Word2': 'LOVE', 'WordIndex': 9},
      {'targetword': 'FLASH', 'R1Word1': 'TOOTH', 'R1Word2': 'CHEEK', 'WordIndex': 10},
      {'targetword': 'CLOCK', 'R1Word1': 'TOUGH', 'R1Word2': 'STAKE', 'WordIndex': 11},
      {'targetword': 'COACH', 'R1Word1': 'FENCE', 'R1Word2': 'SWEAT', 'WordIndex': 12},
      {'targetword': 'LIQUID', 'R1Word1': 'ENGINE', 'R1Word2': 'BURDEN', 'WordIndex': 13},
      {'targetword': 'BITTER', 'R1Word1': 'TRAVEL', 'R1Word2': 'SYMBOL', 'WordIndex': 14},
      {'targetword': 'VISION', 'R1Word1': 'APPEAL', 'R1Word2': 'MOTION', 'WordIndex': 15},
      {'targetword': 'CONCRETE', 'R1Word1': 'FOOTBALL', 'R1Word2': 'MOUNTAIN', 'WordIndex': 16},
      {'targetword': 'STATION', 'R1Word1': 'FASHION', 'R1Word2': 'MACHINE', 'WordIndex': 17},
      {'targetword': 'LETTER', 'R1Word1': 'DEGREE', 'R1Word2': 'PRETTY', 'WordIndex': 18}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
    Routine StudyView1
    Routine ShowResp
    Routine Fbk1
  LoopTerminator Study1Loop
  Routine EndPart1
  Routine Instruct4
  Routine Instruct4_2
  Routine GetReady
  LoopInitiator Study2Loop loopType="TrialHandler"
    conditionsFile = StimFile_A.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'targetword': 'LANE', 'R1Word1': 'BATH', 'R1Word2': 'JOKE', 'WordIndex': 1},
      {'targetword': 'HOLE', 'R1Word1': 'COOL', 'R1Word2': 'MINE', 'WordIndex': 2},
      {'targetword': 'COUNCIL', 'R1Word1': 'PRODUCT', 'R1Word2': 'BALANCE', 'WordIndex': 3},
      {'targetword': 'PRIVATE', 'R1Word1': 'MEETING', 'R1Word2': 'SURFACE', 'WordIndex': 4},
      {'targetword': 'CAUGHT', 'R1Word1': 'SQUARE', 'R1Word2': 'WEALTH', 'WordIndex': 5},
      {'targetword': 'WALK', 'R1Word1': 'SHOT', 'R1Word2': 'PAID', 'WordIndex': 6},
      {'targetword': 'GAME', 'R1Word1': 'BILL', 'R1Word2': 'DEEP', 'WordIndex': 7},
      {'targetword': 'FOOD', 'R1Word1': 'HALL', 'R1Word2': 'PLAY', 'WordIndex': 8},
      {'targetword': 'WEEK', 'R1Word1': 'HELP', 'R1Word2': 'LOVE', 'WordIndex': 9},
      {'targetword': 'FLASH', 'R1Word1': 'TOOTH', 'R1Word2': 'CHEEK', 'WordIndex': 10},
      {'targetword': 'CLOCK', 'R1Word1': 'TOUGH', 'R1Word2': 'STAKE', 'WordIndex': 11},
      {'targetword': 'COACH', 'R1Word1': 'FENCE', 'R1Word2': 'SWEAT', 'WordIndex': 12},
      {'targetword': 'LIQUID', 'R1Word1': 'ENGINE', 'R1Word2': 'BURDEN', 'WordIndex': 13},
      {'targetword': 'BITTER', 'R1Word1': 'TRAVEL', 'R1Word2': 'SYMBOL', 'WordIndex': 14},
      {'targetword': 'VISION', 'R1Word1': 'APPEAL', 'R1Word2': 'MOTION', 'WordIndex': 15},
      {'targetword': 'CONCRETE', 'R1Word1': 'FOOTBALL', 'R1Word2': 'MOUNTAIN', 'WordIndex': 16},
      {'targetword': 'STATION', 'R1Word1': 'FASHION', 'R1Word2': 'MACHINE', 'WordIndex': 17},
      {'targetword': 'LETTER', 'R1Word1': 'DEGREE', 'R1Word2': 'PRETTY', 'WordIndex': 18}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
    Routine StudyView4
    Routine ShowResp
    Routine Confidence
    Routine ChooseFbk
    Routine Fbk2
  LoopTerminator Study2Loop
  Routine EndPart2
  Routine Instruct3a
  Routine GetReady
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = StimFile_A.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Test3
    Routine ShowResp_3
  LoopTerminator trials
  Routine Additup
  Routine EndPart3
